PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1120, 700]
  expName = niyu_solol
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent multitask
      fillColor = white
      shape = circle
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent target
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.10
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $targetword
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    TextComponent distr1
      letterHeight = 0.05
      pos = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $word1
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    TextComponent distr2
      letterHeight = 0.05
      pos = ((random()-0.5, random()-0.5))
      startVal [time (s)] = 0.5
      text [set every repeat] = $word2
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    TextComponent distr3
      letterHeight = 0.05
      pos = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $word3
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    TextComponent distr4
      letterHeight = 0.05
      pos = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $word4
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    TextComponent distr5
      letterHeight = 0.05
      pos = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $word5
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    MouseComponent mouse
      clickable = target
      correctAns = target
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
      storeCorrect = True
      timeRelativeTo = routine
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = multitaskinggg.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'word1': 'mars', 'word2': 'pluto', 'word3': 'venus', 'word4': 'saturn', 'word5': 'jupiter', 'targetword': 'neptune'},
      {'word1': 'pluto', 'word2': 'mars', 'word3': 'mars', 'word4': 'mars', 'word5': 'mars', 'targetword': 'neptune'},
      {'word1': 'venus', 'word2': 'venus', 'word3': 'pluto', 'word4': 'pluto', 'word5': 'pluto', 'targetword': 'neptune'},
      {'word1': 'saturn', 'word2': 'saturn', 'word3': 'saturn', 'word4': 'venus', 'word5': 'venus', 'targetword': 'neptune'},
      {'word1': 'jupiter', 'word2': 'jupiter', 'word3': 'jupiter', 'word4': 'jupiter', 'word5': 'saturn', 'targetword': 'neptune'}]
    Routine trial
  LoopTerminator trials
